<PlusConfiguration version="2.8">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Profile only)"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      Profile="TRUS_Probe_Profile.motive"
      ProjectFile="TRUS_Probe_Profile.motive"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Phantom" />
		<DataSource Type="Tool" Id="Pointer" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
			<DataSource Type="Tool" Id="Probe" />
			<DataSource Type="Tool" Id="Phantom" />
			<DataSource Type="Tool" Id="Pointer" />
        </OutputChannel>
      </OutputChannels>
    </Device>
	<Device
		Id="CaptureDevice"
		Type="VirtualCapture"
		BaseFilename="RecordingTest.mhd"
		EnableCapturing="FALSE"
		EnableCompression="FALSE"
		FrameBufferSize="50">
		<InputChannels>
			<InputChannel Id="TrackerStream" />
		</InputChannels>
	</Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToPhantom" />
        <Transform Name="PointerToPhantom" />
        <Transform Name="PointerToProbe" />
		<Transform Name="PointerToProbe" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>